# BEAM
sv:Ph/Default/Modules = 1 "g4em-standard_opt4"
d:Ph/Default/EMRangeMin = 0.011 MeV
# d:Ph/Default/EMRangeMax = 100 MeV

i:Ma/Verbosity = 0
i:Ts/TrackingVerbosity = 0
i:Ts/EventVerbosity = 0
i:Ts/RunVerbosity = 0
b:Ts/ShowCPUTime = "True"
i:Ts/ShowHistoryCountAtInterval = 10000000
i:Ts/NumberOfThreads = 0

#HU 0
sv:Ma/Mat1/Components=12 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Sodium" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Potassium" "Calcium" # names of elements
uv:Ma/Mat1/Fractions=12 0.108 0.356 0.022 0.509 0.000 0.000 0.001 0.002 0.002 0.000 0.000 0.000# fractions of elements
d:Ma/Mat1/Density= 1.018 g/cm3
d:Ma/Mat1/MeanExcitationEnergy= 75 eV

#HU -400
sv:Ma/Mat2/Components=12 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Sodium" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Potassium" "Calcium"  # names of elements
uv:Ma/Mat2/Fractions=12 0.103 0.105 0.031 0.749 0.002 0.000 0.002 0.003 0.003 0.000 0.002 0.000# fractions of elements
d:Ma/Mat2/Density= 0.6190303991130821 g/cm3
d:Ma/Mat2/MeanExcitationEnergy= 75 eV

s:So/PencilBeam/BeamParticle = "proton"
d:So/PencilBeam/BeamEnergy = 80 MeV
d:So/PencilBeam/BeamPositionSpreadX = 0.3 cm
d:So/PencilBeam/BeamPositionSpreadY = 0.3 cm
i:So/PencilBeam/NumberOfHistoriesInRun = Ts/ShowHistoryCountAtInterval * 10
u:So/PencilBeam/BeamEnergySpread = 1 # 1.111111112 #
s:So/PencilBeam/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/PencilBeam/Component = "BeamSpot"
s:So/PencilBeam/BeamPositionDistribution = "Gaussian" # None, Flat or Gaussian
s:So/PencilBeam/BeamPositionCutoffShape = "Ellipse" # Rectangle or Ellipse (if Flat or Gaussian)
d:So/PencilBeam/BeamPositionCutoffX = 2 cm # X extent of position (if Flat or Gaussian)
d:So/PencilBeam/BeamPositionCutoffY = 2 cm # Y extent of position (if Flat or Gaussian)
s:So/PencilBeam/BeamAngularDistribution = "None" # None, Flat or Gaussian
d:So/PencilBeam/OnlyIncludeParticlesWithInitialKEBelow = 84.0 MeV
d:So/PencilBeam/OnlyIncludeParticlesWithInitialKEAbove = 0.01 MeV

#s:Ge/World/Material="G4_AIR"
s:Ge/World/Material="Vacuum"
d:Ge/World/HLX=5.0 cm
d:Ge/World/HLY=5.0 cm
d:Ge/World/HLZ=40.0 cm
b:Ge/World/Invisible = "TRUE"

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Material = "Mat1"
s:Ge/Phantom/Parent   = "World"
d:Ge/Phantom/HLX      = 1 cm
d:Ge/Phantom/HLY      = 1 cm
d:Ge/Phantom/HLZ      = 3.5 cm
d:Ge/Phantom/TransX   = 0 cm
d:Ge/Phantom/TransY   = 0 cm
d:Ge/Phantom/TransZ   = 0 cm

s:Ge/Insert/Type     = "TsBox"
s:Ge/Insert/Material = "Mat2"
s:Ge/Insert/Parent   = "Phantom"
d:Ge/Insert/HLX      = 1 cm
d:Ge/Insert/HLY      = 0.5 cm
d:Ge/Insert/HLZ      = 1.05 cm
d:Ge/Insert/TransX   = 0 cm
d:Ge/Insert/TransY   = -0.5 cm
d:Ge/Insert/TransZ   = -0.35 cm

s:Ge/BeamSpot/Parent = "World"
s:Ge/BeamSpot/Type = "Group"
d:Ge/BeamSpot/TransX = 0 cm
d:Ge/BeamSpot/TransY = 0 cm
d:Ge/BeamSpot/TransZ = -1 * Ge/Phantom/HLZ cm

s:Sc/EnergyDepAtPhantom/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDepAtPhantom/OutputType = "binary" # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/EnergyDepAtPhantom/Component = "Phantom"
sv:Sc/EnergyDepAtPhantom/Report = 1 "Mean"
s:Sc/EnergyDepAtPhantom/IfOutputFileAlreadyExists = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/EnergyDepAtPhantom/OutputToConsole = "False"
s:Sc/EnergyDepAtPhantom/OutputFile = "RefCalcMC_protons_Edep_BoxInsert_80MeV"
b:Sc/EnergyDepAtPhantom/PropagateToChildren = "True"
i:Sc/EnergyDepAtPhantom/XBins = 80
i:Sc/EnergyDepAtPhantom/YBins = 80
i:Sc/EnergyDepAtPhantom/ZBins = 280

s:Sc/EnergyDepAtPhantomSum/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDepAtPhantomSum/OutputType = "csv" # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/EnergyDepAtPhantomSum/Component = "Phantom"
sv:Sc/EnergyDepAtPhantomSum/Report = 1 "Sum"
s:Sc/EnergyDepAtPhantomSum/IfOutputFileAlreadyExists = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/EnergyDepAtPhantomSum/OutputToConsole = "True"
s:Sc/EnergyDepAtPhantomSum/OutputFile = "RefCalcMC_protons_EdepSum_BoxInsert"
b:Sc/EnergyDepAtPhantomSum/PropagateToChildren = "True"